PsychoPy2experiment version="2021.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Completed URL = $"https://run.pavlovia.org/TAMU_CONGAlab/vts-with-probabilistic-reward/html/?participant=" + expInfo['participant']
  Experiment info = {'participant': ''}
  Force stereo = False
  Full-screen window = True
  Incomplete URL = https://congalab.sites.tamu.edu/study-participation/tsi-debrief/
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1792, 1120]
  expName = Reversal Learning
  exportHTML = on Save
  logging level = debug
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Routines
  Routine Picture
    CodeComponent get_conditions
      Code Type = Both
      Begin Experiment:
        total_points = 0
      Begin JS Experiment:
        total_points = 0;
      Begin JS Routine:
        // Shuffle image locations
        if ((randint(0, 2) === 0)) {
            a_left = 1;
            b_left = 0;
        } else {
            b_left = 1;
            a_left = 0;
        }

        // For training use image a only
        if ((blockCounter === 0)) {
            a_high = 1;
            b_high = 0;
            if ((a_high && a_left)) {
                corr_ans = "f";
            } else {
                if ((b_high && b_left)) {
                    corr_ans = "f";
                } else {
                    corr_ans = "j";
                }
            }
        } else {
            if ((a_high && a_left)) {
                corr_ans = "f";
            } else {
                if ((b_high && b_left)) {
                    corr_ans = "f";
                } else {
                    corr_ans = "j";
                }
            }
        }

        // For training present image a only
        if ((blockCounter === 0)) {
            if ((a_left === 1)) {
                left_file = image_a;
                right_file = image_b;
                left_image.opacity = 0;
                right_image.opacity = 1;
            } else {
                if ((b_left === 1)) {
                    left_file = image_b;
                    right_file = image_a;
                    left_image.opacity = 1;
                    right_image.opacity = 0;
                }
            }
        } else {
            left_image.opacity = 1;
            right_image.opacity = 1;
            if ((a_left === 1)) {
                left_file = image_a;
                right_file = image_b;
            } else {
                if ((b_left === 1)) {
                    left_file = image_b;
                    right_file = image_a;
                }
            }
        }
        thisExp.addData("image_a", image_a);
        thisExp.addData("image_b", image_b);
        thisExp.addData("corr_ans", corr_ans);
      Begin Routine:
        # Shuffle image locations
        if randint(0,2) == 0:
            a_left = 1
            b_left = 0
        else:
            b_left = 1
            a_left = 0

        # For training, only use image a
        if blockCounter == 0:
            a_high = 1
            b_high = 0
            if a_high and a_left:
                corr_ans="f"
            elif b_high and b_left:
                corr_ans="f"
            else:
                corr_ans="j"
        else:
            if a_high and a_left:
                corr_ans="f"
            elif b_high and b_left:
                corr_ans="f"
            else:
                corr_ans="j"

        # For training, set opacity to 0 for image b
        if blockCounter == 0:
            if a_left == 1:
                left_file = image_a
                right_file = image_b
                left_image.opacity = 0
                right_image.opacity = 1
            elif b_left == 1:
                left_file = image_b
                right_file = image_a
                left_image.opacity = 1
                right_image.opacity = 0
        else:
            left_image.opacity = 1
            right_image.opacity = 1
            if a_left == 1:
                left_file = image_a
                right_file = image_b
            elif b_left == 1:
                left_file = image_b
                right_file = image_a

        thisExp.addData("image_a", image_a)
        thisExp.addData("image_b", image_b)
        thisExp.addData("corr_ans", corr_ans)
      End JS Routine:
        if ((key_resp.keys === 'f') || (key_resp.keys === 'j')) {
            no_resp = false;
            feedback_text = "";
        } else {
            no_resp = true;
            feedback_text = "Please respond faster!";
        }

        // Add to counter if correct choice else reset counter
        if (key_resp.corr) {
            corrCounter += key_resp.corr;
        } else {
            corrCounter = 0;
        }
        thisExp.addData("corrCounter", corrCounter);
        thisExp.addData("numCorr", numCorr);

        // 80:20 probabilistic reward
        r = random();
        condition = "";
        prev_cond = "";
        if (no_resp) {
            last_points = 0;
        } else {
            if ((r <= 0.8)) {
                if (key_resp.corr) {
                    last_points = 10;
                    condition = "corr_hi";
                } else {
                    last_points = 1;
                    condition = "err_lo";
                }
            } else {
                if (key_resp.corr) {
                    last_points = 1;
                    condition = "corr_lo";
                } else {
                    last_points = 10;
                    condition = "err_hi";
                }
            }
        }
        thisExp.addData("condition", condition);
        thisExp.addData("prev_cond", prev_cond);
        prev_cond = condition;

        // add points to running total
        total_points += last_points;
        feedback_text += ("\n\nYou received +" + last_points.toString());
        feedback_text += ("\n\nYou have a total of " + total_points.toString());
        thisExp.addData("last_points", last_points);
        thisExp.addData("total_points", total_points);
      End Routine:
        if len(key_resp.keys) == 0:
            no_resp = True
            feedback_text = "Please respond faster!"
        else:
            no_resp = False
            feedback_text = ""

        # Add to counter if correct choice else reset counter
        if key_resp.corr:
            corrCounter += key_resp.corr
        else:
            corrCounter = 0
        thisExp.addData("corrCounter", corrCounter)
        thisExp.addData("numCorr", numCorr)

        # 80:20 Probabilistic reward
        r = random()
        condition=""
        prev_cond=""
        if no_resp:
            last_points = 0
        elif r <= 0.8:
            if key_resp.corr:
                last_points = 10
                condition = "corr_hi"
            else:
                last_points = 1
                condition = "err_lo"
        else:
            if key_resp.corr:
                last_points = 1
                condition = "corr_lo"
            else:
                last_points = 10
                condition = "err_hi"
        thisExp.addData("condition", condition)
        thisExp.addData("prev_cond", prev_cond)
        prev_cond += condition

        # add points to running total
        total_points += last_points
        feedback_text+="\n\nYou received + Rs. " + str(last_points)
        feedback_text+="\n\nYou have a total of Rs. " + str(total_points)
        thisExp.addData("last_points", last_points)
        thisExp.addData("total_points", total_points)
    ImageComponent left_image
      image [set every repeat] = $left_file
      pos = (100, 0)
      size = (125,125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    PolygonComponent polygon
      fillColor = $[1.000,1.000,1.000]
      nVertices = 100
      shape = regular polygon...
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent right_image
      image [set every repeat] = $right_file
      pos = (-100, 0.0)
      size = (125,125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = "f","j"
      correctAns = $corr_ans
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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  Routine Done
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        end_text="You have now completed this task."
        end_text+="\n\nYour final points was:" + str(total_points)
        end_text+="\n\nPress the spacebar to end and continue to the next part of the study."
    TextComponent Finish_Text
      letterHeight = 32
      startVal [time (s)] = 0.00
      text [set every repeat] = $end_text
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    KeyboardComponent Finish_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Results
    TextComponent Results_Text
      letterHeight = 32
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_text
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  Routine Setup
    CodeComponent setup_conditions
      Code Type = Py
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      Begin Experiment:
        # Shuffle set of stimuli
        conditions = list(range(1,18,1))
        shuffle(conditions)
        blockCounter = 0
        nBlocks=3

        # Poisson distribution for iti
        iti_dist=np.random.poisson(2, 100)

        maxTrials = 20
      Begin Routine:
        # Reset counters
        var_trial = 0
        corrCounter = 0 # count number of correct choices
        revCounter=0 # count number of reversals
        # for training, set numCorr to 30 with no reversals
        if blockCounter == 0:
            numCorr = 10
            numReversals = 0
        else:
            numCorr = randint(4,7) # number of correct choices before reversal
            numReversals=2 # number of reversals in a block

        if randint(0,1) == 0:
            a_high = 1
            b_high = 0
        else:
            b_high = 1
            a_high = 0

        # Use new stimuli for each block
        a = conditions[blockCounter*2]
        b = conditions[blockCounter*2+1]

        image_a = "Flakes/Flake"+str(a)+".png"
        image_b = "Flakes/Flake"+str(b)+".png"

        # Shuffle iti
        shuffle(iti_dist)
    TextComponent text_2
      letterHeight = 32
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine BlockEnd
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if blockCounter == 1:
            end_block_txt = "You will now start the actual task. In this task you will see a pair of random pattern images."
            end_block_txt += "\n\nOne image is associated more often with a high reward (Rs. 10) and the other a low reward (Rs. 1), and this will occasionally change."
            end_block_txt += "\nYou will need to figure out which image is worth more points."
            end_block_txt += "\n\nRemember that sometimes you may receive less money for the high reward image, and high money for the low reward image."
            end_block_txt += "\nYou should only start choosing the other image when you are sure that the point values have changed."
            end_block_txt += "\n\nTry to win as much money possible!!"
            end_block_txt += "\n\nPlease press 'f' to choose the image on the left, and press 'j' to choose the image on the right."
            end_block_txt += "\nPlease rest your left index finger on the 'f' key and your right index finger on the 'j' key."
            end_block_txt += "\nYou will be told how many points you gain after each choice."
            end_block_txt += "\n\nPress the space bar whenever you understand these instructions and are ready to begin."
        else:
            end_block_txt = "You may now take a short break."
            end_block_txt += "Press the space bar when you ready to continue."
    TextComponent text
      letterHeight = 28
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_block_txt
      wrapWidth = 1500
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_trial
    CodeComponent reversal_code
      Code Type = Auto->JS
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      Begin Routine:
        # When number of correct response passes threshold
        # reverse until 3 reversals completed then end block
        if corrCounter >= numCorr:
            if revCounter < numReversals:
                if a_high:
                    a_high=0
                    b_high=1
                else:
                    a_high=1
                    b_high=0
                revCounter+=1
                numCorr = randint(7,12) # number of correct choices before reversal
                corrCounter=0
            elif revCounter == numReversals:
                trials.finished = True
                blockCounter+=1
        thisExp.addData("revCounter",revCounter)
        ITI_dur=iti_dist[var_trial]
        var_trial += 1

        if var_trial >= maxTrials:
            trials.finished = True
    TextComponent iti
      letterHeight = 32
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI_dur
      text = +
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  Routine TestInstructions
    TextComponent TestInstructions_txt
      letterHeight = 28
      startVal [time (s)] = 0.0
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      text:
        In this task you will see a pair of random pattern images.

        One is associated more often with a high reward and the other a low reward, and this will occasionally change.
        You will need to figure out which image is worth more points.

        Remember that sometimes you may receive low points for the high reward image,
        and high points for the low reward image.
        You should only start choosing the other image when you are sure that the point values have changed.

        Try to gain the most points possible.
        The participants who earn the most points in the the semester will win up to 100 dollars.

        Please press "f" to choose the image on the left, and press "j" to choose the image on the right.
        Please rest your left index finger on the "f" key and your right index finger on the "j" key.
        You will be told how many points you gain after each choice.

        Press the space bar whenever you understand these instructions and are ready to begin.
    KeyboardComponent Instructions_Response_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append=[].push;
        shuffle=util.shuffle;
        webbrowser=window;

        random = Math.random;

        sum = function (arr) {
        return arr.reduce((a,b)=>a+b)
        }

        randint = function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }

        // save screen information
        var sUsrAg;
        var nIdx;
        function getBrowserId () {
         var browsers = ["MSIE", "Firefox", "Safari", "Chrome", "Opera"];
         sUsrAg = window.navigator.userAgent,
         nIdx = browsers.length - 1;
         for (nIdx; nIdx > -1 && sUsrAg.indexOf(browsers [nIdx]) === -1; nIdx--);

          return browsers[nIdx];
        }

        expInfo['OS'] = window.navigator.platform;
        expInfo['browser'] = getBrowserId();
        expInfo['xResolution'] = screen.width;
        expInfo['yResolution'] = screen.height;
    TextComponent Instructions_txt
      letterHeight = 28
      startVal [time (s)] = 0.0
      wrapWidth = 1500
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      text:
        THIS IS THE TRAINING FOR THE TASK.

        You will see a single image that is more often associated with a high reward (Rs. 10) than a low reward (Rs. 1). This is called a probabilistic outcome. This training will demonstrate how probabilistic outcomes work.

        If the image appears on the left of the screen press ‘f’ with your left index finger and if it appears on the right side of the screen press ‘j’ with your right index finger. You will then see how many points you received for that choice.

        Press the space bar whenever you understand these instructions and are ready to begin.
    KeyboardComponent Instructions_Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = nBlocks
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    Routine Setup
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = maxTrials
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      Routine Picture
      Routine Results
      Routine end_trial
    LoopTerminator trials
    Routine BlockEnd
  LoopTerminator blocks
  Routine Done
